PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['fileset'], expInfo['date'])
  Experiment info = {'participant': '', 'fileset': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['practicelistof45/057 copy.mp4', 'practicelistof45/057 copy.webm', 'AAPE Images for PsychoPy/Jpeg - not great/affectAAPE.jpg', 'AAPE Images for PsychoPy/Jpeg - not great/anxietyAAPE.jpg', 'AAPE Images for PsychoPy/Jpeg - not great/energyAAPE.jpg', 'AAPE Images for PsychoPy/Jpeg - not great/prideAAPE.jpeg', 'AAPE Images for PsychoPy/Photoshop/Affect.png', 'AAPE Images for PsychoPy/Photoshop/Anxiety.png', 'AAPE Images for PsychoPy/Photoshop/Energy.png', 'AAPE Images for PsychoPy/Photoshop/Pride.png', 'practicelistof45/057 copy.avi', 'fileorders/Order001.csv', 'fileorders/Order002.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = black
  expName = PEACEskeleton
  exportHTML = on Save
  keyboardBackend = Pyglet
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Routines
  Routine welcome
    TextboxComponent Intro
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
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      text:
        Today you will watch several video clips that will elicit an emotional reaction. Each clip is approximately 3-5 seconds in duration.

        After each video, you will be asked to rate the video using a visual scale. Then you will describe how the video made you feel by typing a word or short phrase (1-3 words).

        We will first have you complete a practice so you can familiarize yourself with the task.

        Press the 'space bar' to begin the practice.
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    KeyboardComponent startresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ResourceManagerComponent resources_2
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['practicelistof45/057 copy.avi', 'fileorders/Order001.csv']
      startVal [time (s)] = 0
  Routine reaction1
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  Routine affect
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    ImageComponent affect_image
      image = AAPE Images for PsychoPy/Photoshop/Affect.png
      size = (1.5, .75)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent affect_slider
      color = -1.0000, -1.0000, -1.0000
      fillColor = -0.2549, 0.2392, 0.2549
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5)
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  Routine anxiety
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    ImageComponent anxiety_image
      image = AAPE Images for PsychoPy/Photoshop/Anxiety.png
      size = (1.5, .75)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent anxiety_slider
      color = -1.0000, -1.0000, -1.0000
      fillColor = -0.2549, 0.2392, 0.2549
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5)
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  Routine energy
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    ImageComponent energy_image
      image = AAPE Images for PsychoPy/Photoshop/Energy.png
      size = (1.5, .75)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent energy_slider
      color = -1.0000, -1.0000, -1.0000
      fillColor = -0.2549, 0.2392, 0.2549
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5)
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  Routine pride
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    ImageComponent pride_image
      image = AAPE Images for PsychoPy/Photoshop/Pride.png
      size = (1.25, .35)
      startVal [time (s)] = 0.0
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    SliderComponent pride_slider
      color = -1.0000, -1.0000, -1.0000
      fillColor = -0.2549, 0.2392, 0.2549
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5)
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  Routine multandopen
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  Routine NeutralVideo
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $neutralmovie_filename
      size = (2,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine NegativeVideo
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    MovieComponent negativemovie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $negativemovie_filename
      size = (2,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine thankyou
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    TextComponent thankyoutext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press the 'spacebar' to end the session.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Videos
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    MovieComponent varietyvideos
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $movie_filename
      size = (2,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine loop_begin
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    TextComponent begin_video_loop
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the 'space bar' to begin the video.
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    KeyboardComponent startresp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reaction_instructions
    TextboxComponent textbox
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
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      text:
        Now you will be asked to rate how the video made you feel using a set of pictorial rating scales.

        You will be shown four different rating scales consisting of five pictures each. Please use the mouse to click the number under the picture that most closely resembles how this video clip made you feel.

        Clicking the number will advance you on to the next scale.

        Press the 'space bar' to continue.
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    KeyboardComponent startresp3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine type_instructions
    TextboxComponent word_instructions
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
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      text:
        Now, you will explain how the video made you feel by typing a word or short phrase.

        After you type in your word or phrase, hit 'return' or 'enter' to submit your response.

        Press the 'space bar' to continue.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine typed_word_response
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    TextboxComponent typed_response
      bold = False
      borderColor = -0.2549, 0.2392, 0.2549
      editable = True
      letterHeight = 0.05
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 2)
      startVal [time (s)] = 0.0
      text = Please type your response.
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $'fileorders/Order' + expInfo['fileset'] + '.csv'
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('movie_filename', 'practicelistof45mov/018 copy.mov')]),
      OrderedDict([('movie_filename', 'practicelistof45mov/041 copy.mov')]),
      OrderedDict([('movie_filename', 'practicelistof45mov/115 copy.mov')])]
    Routine loop_begin
    Routine Videos
    Routine reaction_instructions
    Routine affect
    Routine anxiety
    Routine energy
    Routine pride
    Routine type_instructions
    Routine typed_word_response
  LoopTerminator trials
  Routine thankyou
